<?xml version="1.0" encoding="utf-8"?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.4/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.4/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.4/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
    <procedure xsi:type="apex:constantProcedure">
        <parameters>
            <presentations>1</presentations>
            <skip>0</skip>
            <order>sequential</order>
            <time_before_first_trial>0</time_before_first_trial>
            <input_during_stimulus>false</input_during_stimulus>
        </parameters>
        <trials>
            <trial id="trial_pre_story1">
                <answer>1</answer>
                <screen id="screen_pre_story1"/>
                <stimulus id="stim_silence_story1"/>
            </trial>
            <trial id="trial_story1">
                <answer>1</answer>
                <screen id="screenEmpty"/>
                <stimulus id="stim_story1"/>
            </trial>
            <trial id="trial_post_story1">
                <answer>correct_button</answer>
                <screen id="screen_post_story1"/>
                <stimulus id="stim_silence_story1"/>
            </trial>
        </trials>
    </procedure>
    
    <screens>
        <general>
            <repeatbutton>false</repeatbutton>
            <showpanel>true</showpanel>
            <showmenu>true</showmenu>
            <fullscreen>false</fullscreen>
        </general>
        <reinforcement>
            <progressbar>true</progressbar>
            <feedback>false</feedback>
        </reinforcement>
        <style>
            QPushButton:checked {background-color: lightgreen}
            QPushButton:disabled {background-color: red}
            QPushButton {background-color: green}


        </style>
        <screen id="screenEmpty">      
         <gridLayout height="3" width="1">
           <button id="up" x="1" y="2">    
               <text>+</text>  <!-- meer spraak -->      
            </button> 
         </gridLayout> 
         <buttongroup id="buttongroup1">
            <button id="up"/>
         </buttongroup>
         <default_answer_element>buttongroup1</default_answer_element>    
      </screen>       
        <screen id="screen_pre_story1">
         <gridLayout height="3" id="main" width="1">
            <label col="1" id="question" row="1">
               <text>Radioboek Charlotte Therssen | Lena_1</text>
            </label>
            <textEdit col="1" id="questionEdit" row="2"/>
            <button id="button" row="3">
               <text>Volgende</text>
            </button>
         </gridLayout>
         <default_answer_element>button</default_answer_element>
      </screen>
        <screen id="screen_post_story1">
         <gridLayout height="3" id="main" width="1">
            <label col="1" id="question" row="1">
               <text>9d3bf335_Radioboek_Charlotte_Therssen__Lena_1</text>
            </label>
            <textEdit col="1" id="questionEdit" row="2"/>
             <gridLayout height="1" width="2" row="3">
            <button col="1" row="1" id="button_correct">
            <text>Correct</text>
             </button>
            <button col="2" row="1" id="button_wrong">
            <text>Incorrect</text>
            </button>
             </gridLayout>
         </gridLayout>
        <buttongroup id="buttongroup">
        <button id="button_correct"/>
        <button id="button_wrong"/>
        </buttongroup>
        <default_answer_element>buttongroup</default_answer_element>
        </screen>
    </screens>
    
    <datablocks>
        <prefix>build/stimuli</prefix>
        <datablock id="datablock_story1">
            <device>soundcard</device>
            <file>n/audiobook_11_1.npz</file>
        </datablock>
		<datablock id="tdatablock_story1">
            <device>soundcard</device>
            <file>t_n/audiobook_11_1.npz</file>
        </datablock>
		<datablock id="tdatablock_silence1000">
            <description>soundcard</description>
            <file>silence:1000</file>
        </datablock>
        <datablock id="datablock_story1_noise">
            <device>soundcard</device>
            <file>noise_n/audiobook_11_1.npz</file>
        </datablock>
        <datablock id="datablock_silence1000">
            <description>soundcard</description>
            <file>silence:1000</file>
        </datablock>
        
        <datablock id="datablock_silence">
            <description>soundcard</description>
            <file>silence:10</file>
        </datablock>
    </datablocks>
    
    <devices>
        <master>soundcard</master>
        <device id="soundcard" xsi:type="apex:wavDeviceType">
            <driver>asio</driver>
            <card>default</card>
            <channels>4</channels>
            <gain channel="2" id="gainL">0</gain>
            <gain channel="3" id="gainR">0</gain>
            <samplerate>48000</samplerate>
            <padzero>0</padzero>
        </device>
    </devices>
    
    <filters>
        <filter id="calibration" xsi:type="apex:amplifier">
            <device>soundcard</device>
            <channels>1</channels>
            <basegain>0</basegain>
            <invertgain>false</invertgain>
            <gain id="gain">0</gain>
        </filter>
        <filter id="dataloop_channel1" xsi:type="apex:dataloop">
            <device>soundcard</device>
            <channels>1</channels>
            <continuous>true</continuous>
            <datablock>datablock_story1_noise</datablock>
            <basegain>0</basegain>
            <invertgain>true</invertgain>
            <gain id="noisegain">0</gain>
            <randomjump>true</randomjump>
            <jump>0</jump>
        </filter> 
    </filters>
    
    <stimuli>
        <stimulus id="stim_story1">
            <datablocks>
                <simultaneous>
                    <sequential>
                        <datablock id="datablock_silence1000"/>
                        <datablock id="datablock_story1"/>
                        <datablock id="datablock_silence1000"/>
                    </sequential>
                    <sequential>
                        <datablock id="tdatablock_silence1000"/>
                        <datablock id="tdatablock_story1"/>
                    </sequential>
                </simultaneous>
            </datablocks>
            <variableParameters>
                <parameter id="noisegain">100.00</parameter>
            </variableParameters>
        </stimulus>
        <stimulus id="stim_silence_story1">
            <datablocks>
                <datablock id="datablock_silence"/>
            </datablocks> 
            <variableParameters>
                <parameter id="noisegain">100.00</parameter>
            </variableParameters>
        </stimulus>
        <stimulus id="calibrationstimulus">
            <datablocks>
                <datablock id="datablock_silence1000"/>
            </datablocks>
        </stimulus>
    </stimuli>
    
    <connections>
        <connection>
            <from>
                <id mode="wildcard">datablock*</id>
                <channel>0</channel>
            </from>
            <to>
                <id>calibration</id>
                <channel>0</channel>
            </to>
        </connection>
        <connection>
            <from>
                <id>dataloop_channel1</id>
                <channel>0</channel>
            </from>
            <to>
                <id>calibration</id>
                <channel>0</channel>
            </to>
        </connection>
        <connection>
            <from>
                <id>calibration</id>
                <channel>0</channel>
            </from>
            <to>
                <id>soundcard</id>
                <channel>2</channel> <!-- kanaal links -->
            </to>
        </connection>
        <connection>
            <from>
                <id>calibration</id>
                <channel>0</channel>
            </from>
            <to>
                <id>soundcard</id>
                <channel>3</channel> <!-- kanaal rechts -->
            </to>
        </connection>
        <connection>
            <from>
                <id mode="wildcard">tdatablock*</id>
                <channel>0</channel>
            </from>
            <to>
                <id>soundcard</id>
                <channel>1</channel>
            </to>
        </connection>
    </connections>
    
    <calibration profile="C2DNN_MATRIXRMSDB">
        <stimuli>
            <stimulus id="calibrationstimulus"/>
        </stimuli>
        <parameters>
            <parameter id="gainL">
                <targetamplitude>62</targetamplitude> <!-- bilaterale stimulatie => 2x 62 dBA = 65 dBA -->
                <calibrationamplitude>80</calibrationamplitude>
                <mute>-150</mute>
                <min>-50</min>
                <max>10</max>
            </parameter>
            <parameter id="gainR">
                <targetamplitude>62</targetamplitude> <!-- bilaterale stimulatie => 2x 62 dBA = 65 dBA -->
                <calibrationamplitude>80</calibrationamplitude>
                <mute>-150</mute>
                <min>-50</min>
                <max>10</max>
            </parameter>
        </parameters>
    </calibration>
    
    <results>
        <page>apex:resultsviewer.html</page>
        <subject></subject>
    </results>
    
    <interactive>                
        <entry type="string" description="subject" default="" expression="apex:apex/results[1]/subject[1]" />  
        <entry type="double" description="SNR" default="100" expression="/apex:apex/stimuli[1]/stimulus[1]/variableParameters[1]/parameter[1]|/apex:apex/stimuli[1]/stimulus[2]/variableParameters[1]/parameter[1]"/> 
   </interactive>  
    
    <general>
        <allowskip>true</allowskip>
    </general>
    
</apex:apex>

